PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = GUI_upto_VEP1_correct
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = .5
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    ImageComponent Cross
      image = cross.png
      size = (0.1, 0.1)
      startVal [time (s)] = 2.1
      stopVal [time (s)] = 62.1
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    ImageComponent LC1
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 62.2
      stopVal [duration (s)] = .8
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    ImageComponent LC2
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 66.1
      stopVal [duration (s)] = .8
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    ImageComponent Rc1
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 70
      stopVal [duration (s)] = .8
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    ImageComponent lc3
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 73.9
      stopVal [duration (s)] = .8
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    ImageComponent rc2
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 77.8
      stopVal [duration (s)] = .8
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    ImageComponent rc3
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 81.7
      stopVal [duration (s)] = .8
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    ImageComponent lc4
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 85.6
      stopVal [duration (s)] = .8
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    ImageComponent lc5
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 89.5
      stopVal [duration (s)] = .8
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    ImageComponent lc6
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 93.4
      stopVal [duration (s)] = .8
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    ImageComponent rc4
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 97.3
      stopVal [duration (s)] = .8
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    ImageComponent rc5
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 101.2
      stopVal [duration (s)] = .8
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    ImageComponent lc7
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 105.1
      stopVal [duration (s)] = .8
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    ImageComponent rc6
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 109
      stopVal [duration (s)] = .8
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    ImageComponent rc7
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 112.9
      stopVal [duration (s)] = .8
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    ImageComponent lc8
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 116.8
      stopVal [duration (s)] = .8
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    ImageComponent MI1LC1
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 125.7
      stopVal [duration (s)] = .8
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 120.7
      stopVal [duration (s)] = 4.5
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      text:
        You can relax for 5 seconds
    ImageComponent MILC2
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 129.6
      stopVal [duration (s)] = .8
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    ImageComponent MIRC1
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 133.5
      stopVal [duration (s)] = .8
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    ImageComponent MILC3
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 137.4
      stopVal [duration (s)] = .8
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    ImageComponent MIRC2
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 141.3
      stopVal [duration (s)] = .8
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    ImageComponent MIRC3
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 145.2
      stopVal [duration (s)] = .8
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    ImageComponent MILC4
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 149.1
      stopVal [duration (s)] = .8
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    ImageComponent MILC5
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 153
      stopVal [duration (s)] = .8
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    ImageComponent MILC6
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 156.9
      stopVal [duration (s)] = .8
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    ImageComponent MIRC4
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 160.8
      stopVal [duration (s)] = .8
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    ImageComponent MIRC5
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 164.5
      stopVal [duration (s)] = .8
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    ImageComponent MILC7
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 168.4
      stopVal [duration (s)] = .8
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    ImageComponent MIRC6
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 172.3
      stopVal [duration (s)] = .8
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    ImageComponent MIRC7
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 176.2
      stopVal [duration (s)] = .8
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    ImageComponent MILC8
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 180.1
      stopVal [duration (s)] = .8
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 184
      stopVal [duration (s)] = 4.5
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      text:
        You can Relax for 5 seconds
    ImageComponent MMLI1
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 189
      stopVal [duration (s)] = .8
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    ImageComponent MMLI2
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 192.9
      stopVal [duration (s)] = .8
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    ImageComponent MMRI1
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 196.8
      stopVal [duration (s)] = .8
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    ImageComponent MMLI3
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 200.7
      stopVal [duration (s)] = .8
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    ImageComponent MMRI2
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 204.6
      stopVal [duration (s)] = .8
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    ImageComponent MMRI3
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 208.5
      stopVal [duration (s)] = .8
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    ImageComponent MMLI4
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 212.4
      stopVal [duration (s)] = .8
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    ImageComponent MMLI5
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 216.3
      stopVal [duration (s)] = .8
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    ImageComponent MMLI6
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 220.2
      stopVal [duration (s)] = .8
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    ImageComponent MMRi4
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 224.1
      stopVal [duration (s)] = .8
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    ImageComponent MMRI5
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 228
      stopVal [duration (s)] = .8
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    ImageComponent MMLI7
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 231.9
      stopVal [duration (s)] = .8
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    ImageComponent MMRI6
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 235.8
      stopVal [duration (s)] = .8
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    ImageComponent MMRI7
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 239.7
      stopVal [duration (s)] = .8
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    ImageComponent MMLI8
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 243.6
      stopVal [duration (s)] = .8
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 247.5
      stopVal [duration (s)] = 4.5
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      text:
        You can relax for 5 seconds
    ImageComponent MILI1
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 252.6
      stopVal [duration (s)] = .8
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    ImageComponent MILI2
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 258.4
      stopVal [duration (s)] = .8
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    ImageComponent MIRI1
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 262.3
      stopVal [duration (s)] = .8
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    ImageComponent MILI3
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 266.2
      stopVal [duration (s)] = .8
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    ImageComponent MIRi2
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 270.1
      stopVal [duration (s)] = .8
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    ImageComponent MIRI3
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 274
      stopVal [duration (s)] = .8
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    ImageComponent MILI4
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 277.9
      stopVal [duration (s)] = .8
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    ImageComponent MILI5
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 281.8
      stopVal [duration (s)] = .8
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    ImageComponent MILI6
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 285.7
      stopVal [duration (s)] = .8
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    ImageComponent MIRI4
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 289.6
      stopVal [duration (s)] = .8
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    ImageComponent MIRI5
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 293.5
      stopVal [duration (s)] = .8
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    ImageComponent MILI7
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 297.4
      stopVal [duration (s)] = .8
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    ImageComponent MIri6
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 301.3
      stopVal [duration (s)] = .8
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    ImageComponent miri7
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 305.2
      stopVal [duration (s)] = .8
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    ImageComponent mili8
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 309.1
      stopVal [duration (s)] = .8
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 313
      stopVal [duration (s)] = 4.5
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      text:
        You can relax for 5 seconds
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 318
      stopVal [duration (s)] = .8
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      text:
        Press K
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 321.4
      stopVal [duration (s)] = .8
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      text:
        Press W
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 324.8
      stopVal [duration (s)] = .8
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      text:
        Press T
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 328.2
      stopVal [duration (s)] = .8
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      text:
        Press Z
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 331.6
      stopVal [duration (s)] = .8
      text = Press I
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 335
      stopVal [duration (s)] = .8
      text = Press B
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 338.4
      stopVal [duration (s)] = .4
      text = Press X
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 341.8
      stopVal [duration (s)] = .8
      text = Press Y
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 345.2
      stopVal [duration (s)] = .8
      text = Press B
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 348.6
      stopVal [duration (s)] = .8
      text = Press C
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 352
      stopVal [duration (s)] = .8
      text = Press O
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 355.4
      stopVal [duration (s)] = .8
      text = Press R
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 358.8
      stopVal [duration (s)] = .8
      text = Press V
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 362.2
      stopVal [duration (s)] = .8
      text = Press N
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    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 365.6
      stopVal [duration (s)] = .8
      text = Press U
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 369
      stopVal [duration (s)] = .8
      text = Press M
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    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 372.4
      stopVal [duration (s)] = .8
      text = Press A
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    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 375.8
      stopVal [duration (s)] = .8
      text = Press F
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    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 379.2
      stopVal [duration (s)] = 4.5
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      text:
        You can Relax for 5 seconds
    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 384.3
      stopVal [duration (s)] = .8
      text = Press G
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    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 387.7
      stopVal [duration (s)] = .8
      text = Press E
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    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 391.1
      stopVal [duration (s)] = .8
      text = Press Z
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    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 394.5
      stopVal [duration (s)] = .8
      text = Press O
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    TextComponent text_28
      letterHeight = 0.05
      startVal [time (s)] = 397.9
      stopVal [duration (s)] = .8
      text = Press I
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    TextComponent text_29
      letterHeight = 0.05
      startVal [time (s)] = 401.3
      stopVal [duration (s)] = .8
      text = Press B
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    TextComponent text_30
      letterHeight = 0.05
      startVal [time (s)] = 404.7
      stopVal [duration (s)] = .8
      text = Press A
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    TextComponent text_31
      letterHeight = 0.05
      startVal [time (s)] = 408.1
      stopVal [duration (s)] = .8
      text = Press Q
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    TextComponent text_32
      letterHeight = 0.05
      startVal [time (s)] = 411.5
      stopVal [duration (s)] = .8
      text = Press B
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    TextComponent text_33
      letterHeight = 0.05
      startVal [time (s)] = 414.9
      stopVal [duration (s)] = .8
      text = Press C
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    TextComponent text_34
      letterHeight = 0.05
      startVal [time (s)] = 418.3
      stopVal [duration (s)] = .8
      text = Press O
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    TextComponent text_35
      letterHeight = 0.05
      startVal [time (s)] = 421.7
      stopVal [duration (s)] = .8
      text = Press R
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    TextComponent text_36
      letterHeight = 0.05
      startVal [time (s)] = 425.1
      stopVal [duration (s)] = .8
      text = Press V
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    TextComponent text_37
      letterHeight = 0.05
      startVal [time (s)] = 428.5
      stopVal [duration (s)] = .8
      text = Press N
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    TextComponent text_38
      letterHeight = 0.05
      startVal [time (s)] = 431.9
      stopVal [duration (s)] = .8
      text = Press U
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    TextComponent text_39
      letterHeight = 0.05
      startVal [time (s)] = 435.3
      stopVal [duration (s)] = .8
      text = Press M
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    TextComponent text_40
      letterHeight = 0.05
      startVal [time (s)] = 438.7
      stopVal [duration (s)] = .8
      text = Press L
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    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 442.1
      stopVal [duration (s)] = .8
      text = Press F
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    TextComponent text_42
      letterHeight = 0.05
      startVal [time (s)] = 445.5
      stopVal [duration (s)] = 4.5
      text = You can Relax for 5 seconds
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    ImageComponent MIRM1
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 450.1
      stopVal [duration (s)] = .8
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    ImageComponent MILM1
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 454
      stopVal [duration (s)] = .8
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    ImageComponent MIRM2
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 457.9
      stopVal [duration (s)] = .8
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    ImageComponent MILM2
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 461.8
      stopVal [duration (s)] = .8
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    ImageComponent MILM3
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 465.7
      stopVal [duration (s)] = .8
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    ImageComponent MIRM3
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 469.6
      stopVal [duration (s)] = .8
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    ImageComponent MILM4
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 473.5
      stopVal [duration (s)] = .8
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    ImageComponent MIRM4
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 477.4
      stopVal [duration (s)] = .8
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    ImageComponent MILM5
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 481.3
      stopVal [duration (s)] = .8
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    ImageComponent MIRM5
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 485.2
      stopVal [duration (s)] = .8
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    ImageComponent MIRM6
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 489.1
      stopVal [duration (s)] = .8
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    ImageComponent MILM6
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 493
      stopVal [duration (s)] = .8
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    ImageComponent MIRM7
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 496.9
      stopVal [duration (s)] = .8
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    ImageComponent MILM7
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 500.8
      stopVal [duration (s)] = .8
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    ImageComponent MILM8
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 504.7
      stopVal [duration (s)] = .8
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    TextComponent text_43
      letterHeight = 0.05
      startVal [time (s)] = 508.6
      stopVal [duration (s)] = 3
      text = Your can relax for 3 seconds 
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    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 512
      stopVal [duration (s)] = .500
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    SoundComponent sound_3
      sound = A
      startVal [time (s)] = 572
      stopVal [duration (s)] = .500
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    ImageComponent VEP1I9
      image = VEP3 protocol images/9.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 574
      stopVal [duration (s)] = .8
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    SliderComponent S9
      color = 0.6549, 0.6549, 0.6549
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity','Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 574.9
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent vep1I18
      image = VEP3 protocol images/18.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 576.8
      stopVal [duration (s)] = .8
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    SliderComponent S18
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 577.7
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I31
      image = VEP3 protocol images/31.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 579.6
      stopVal [duration (s)] = .8
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    SliderComponent S31
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 580.5
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I24
      image = VEP3 protocol images/24.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 582.4
      stopVal [duration (s)] = .8
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    SliderComponent S24
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 583.3
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I30
      image = VEP3 protocol images/30.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 585.2
      stopVal [duration (s)] = .8
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    SliderComponent S30
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 586.1
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEp1I12
      image = VEP3 protocol images/12.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 588
      stopVal [duration (s)] = .8
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    SliderComponent S12
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 588.9
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I27
      image = VEP3 protocol images/27.png
      size = (0.5, 0.5)
      startVal [time (s)] = 590.8
      stopVal [duration (s)] = .8
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    SliderComponent S27
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 591.7
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I28
      image = VEP3 protocol images/28.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 593.6
      stopVal [duration (s)] = .8
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    SliderComponent S28
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 594.5
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I16
      image = VEP3 protocol images/16.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 596.4
      stopVal [duration (s)] = .8
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    SliderComponent S16
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 597.3
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I29
      image = VEP3 protocol images/29.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 599.2
      stopVal [duration (s)] = .8
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    SliderComponent S29
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 600.1
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I32
      image = VEP3 protocol images/32.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 602
      stopVal [duration (s)] = .8
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    SliderComponent S32
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 602.9
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I5
      image = VEP3 protocol images/5.png
      size = (0.5, 0.5)
      startVal [time (s)] = 604.8
      stopVal [duration (s)] = .8
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    SliderComponent S5
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 605.7
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I23
      image = VEP3 protocol images/23.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 607.6
      stopVal [duration (s)] = .8
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    SliderComponent S23
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 608.5
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I26
      image = VEP3 protocol images/26.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 610.4
      stopVal [duration (s)] = .8
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
    ImageComponent vep1I8
      image = VEP3 protocol images/8.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 613.2
      stopVal [duration (s)] = .8
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
    ImageComponent VEp1I17
      image = VEP3 protocol images/17.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 616
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I3
      image = VEP3 protocol images/3.png
      size = (0.5, 0.5)
      startVal [time (s)] = 618.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I11
      image = VEP3 protocol images/11.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 621.6
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I21
      image = VEP3 protocol images/21.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 624.4
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I25
      image = VEP3 protocol images/25.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 627.2
      stopVal [duration (s)] = .8
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    SliderComponent s25
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 628.1
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I20
      image = VEP3 protocol images/20.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 630
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I13
      image = VEP3 protocol images/13.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 632.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I19
      image = VEP3 protocol images/19.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 635.6
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I1
      image = VEP3 protocol images/1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 638.4
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I7
      image = VEP3 protocol images/7.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 641.2
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I4
      image = VEP3 protocol images/4.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 644
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I6
      image = VEP3 protocol images/6.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 646.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I22
      image = VEP3 protocol images/22.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 649.6
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I2
      image = VEP3 protocol images/2.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 652.4
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I10
      image = VEP3 protocol images/10.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 655.2
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I15
      image = VEP3 protocol images/15.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 658
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I14
      image = VEP3 protocol images/14.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 660.8
      stopVal [duration (s)] = .8
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
    TextComponent text_44
      letterHeight = 0.05
      startVal [time (s)] = 664
      stopVal [duration (s)] = 9.5
      text = You can Relax for 10 seconds
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    ImageComponent VEP2C1
      image = flowers/daisy/image_0801.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 674
      stopVal [duration (s)] = 1.2
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    TextComponent text_45
      letterHeight = 0.08
      pos = (-0.5, 0)
      startVal [time (s)] = 674
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent d1
      image = flowers/daisy/image_0802.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 675.4
      stopVal [duration (s)] = .5
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    ImageComponent d2
      image = flowers/daisy/image_0806.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 676
      stopVal [duration (s)] = .3
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    ImageComponent s1
      image = flowers/sunflower/image_0721.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 676.4
      stopVal [duration (s)] = .4
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    ImageComponent b1
      image = flowers/bluebell/image_0242.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 676.9
      stopVal [duration (s)] = .5
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    ImageComponent d4
      image = flowers/daisy/image_0814.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 677.5
      stopVal [duration (s)] = .3
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    ImageComponent s2
      image = flowers/sunflower/image_0726.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 677.9
      stopVal [duration (s)] = .4
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    SliderComponent VS1
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 678.4
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP2C2
      image = flowers/sunflower/image_0730.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 680.3
      stopVal [duration (s)] = 1.2
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    TextComponent text_46
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 680.3
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent b2
      image = flowers/sunflower/image_0741.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 681.6
      stopVal [duration (s)] = .3
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    ImageComponent image
      image = flowers/sunflower/image_0739.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 682
      stopVal [duration (s)] = .2
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    ImageComponent image_2
      image = flowers/daisy/image_0810.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 682.3
      stopVal [duration (s)] = .3
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    ImageComponent image_3
      image = flowers/bluebell/image_0257.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 682.7
      stopVal [duration (s)] = .3
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    ImageComponent image_4
      image = flowers/sunflower/image_0736.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 683.1
      stopVal [duration (s)] = .4
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    ImageComponent image_5
      image = flowers/sunflower/image_0742.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 683.6
      stopVal [duration (s)] = .2
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    ImageComponent image_6
      image = flowers/bluebell/image_0251.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 683.9
      stopVal [duration (s)] = .2
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    ImageComponent image_7
      image = flowers/daisy/image_0817.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 684.2
      stopVal [duration (s)] = .4
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 684.7
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP2C3
      image = flowers/daisy/image_0817.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 686.6
      stopVal [duration (s)] = 1.2
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    TextComponent text_47
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 686.6
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_8
      image = flowers/bluebell/image_0252.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 687.9
      stopVal [duration (s)] = .3
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    ImageComponent image_9
      image = flowers/daisy/image_0808.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 688.3
      stopVal [duration (s)] = .2
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    ImageComponent image_10
      image = flowers/sunflower/image_0721.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 688.6
      stopVal [duration (s)] = .3
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    ImageComponent image_11
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 689
      stopVal [duration (s)] = .2
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    ImageComponent image_12
      image = flowers/daisy/image_0810.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 689.3
      stopVal [duration (s)] = .3
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    ImageComponent image_13
      image = flowers/bluebell/image_0248.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 689.7
      stopVal [duration (s)] = .4
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    ImageComponent image_14
      image = flowers/bluebell/image_0251.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 690.2
      stopVal [duration (s)] = .3
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    ImageComponent image_15
      image = flowers/daisy/image_0805.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 690.6
      stopVal [duration (s)] = .3
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 691
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP2C4
      image = flowers/bluebell/image_0262.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 692.9
      stopVal [duration (s)] = 1.2
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    TextComponent text_48
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 692.9
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_16
      image = flowers/sunflower/image_0728.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 694.2
      stopVal [duration (s)] = .2
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    ImageComponent image_17
      image = flowers/bluebell/image_0247.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 694.5
      stopVal [duration (s)] = .3
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    ImageComponent image_18
      image = flowers/bluebell/image_0242.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 694.9
      stopVal [duration (s)] = .3
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    ImageComponent image_19
      image = flowers/bluebell/image_0249.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 695.3
      stopVal [duration (s)] = .2
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    ImageComponent image_20
      image = flowers/daisy/image_0812.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 695.8
      stopVal [duration (s)] = .3
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    ImageComponent image_21
      image = flowers/bluebell/image_0250.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 696.2
      stopVal [duration (s)] = .1
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    ImageComponent image_22
      image = flowers/bluebell/image_0257.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 696.4
      stopVal [duration (s)] = .2
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    ImageComponent image_23
      image = flowers/bluebell/image_0261.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 696.7
      stopVal [duration (s)] = .2
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    ImageComponent image_24
      image = flowers/daisy/image_0817.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 697
      stopVal [duration (s)] = .2
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 697.3
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C5
      image = flowers/sunflower/image_0737.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 699.2
      stopVal [duration (s)] = 1.2
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    TextComponent text_49
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 699.2
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_26
      image = flowers/sunflower/image_0727.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 700.5
      stopVal [duration (s)] = .2
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    ImageComponent image_27
      image = flowers/sunflower/image_0736.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 700.8
      stopVal [duration (s)] = .1
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    ImageComponent image_28
      image = flowers/bluebell/image_0252.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 701
      stopVal [duration (s)] = .3
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    ImageComponent image_29
      image = flowers/bluebell/image_0268.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 701.4
      stopVal [duration (s)] = .3
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    ImageComponent image_30
      image = flowers/sunflower/image_0730.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 701.8
      stopVal [duration (s)] = .4
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    ImageComponent image_31
      image = flowers/daisy/image_0809.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 702.3
      stopVal [duration (s)] = .1
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    ImageComponent image_32
      image = flowers/daisy/image_0817.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 702.5
      stopVal [duration (s)] = .3
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    ImageComponent image_33
      image = flowers/daisy/image_0802.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 702.9
      stopVal [duration (s)] = .4
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    ImageComponent image_34
      image = flowers/sunflower/image_0737.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 703.4
      stopVal [duration (s)] = .1
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    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 703.6
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C6
      image = flowers/bluebell/image_0312.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 705.5
      stopVal [duration (s)] = 1.2
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    TextComponent text_50
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 705.5
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_36
      image = flowers/daisy/image_0811.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 706.8
      stopVal [duration (s)] = .5
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    ImageComponent image_37
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 707.4
      stopVal [duration (s)] = .3
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
    ImageComponent image_35
      image = flowers/sunflower/image_0731.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 708.1
      stopVal [duration (s)] = .2
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
    ImageComponent image_39
      image = flowers/daisy/image_0811.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 709
      stopVal [duration (s)] = .4
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    ImageComponent image_40
      image = flowers/sunflower/image_0742.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 709.5
      stopVal [duration (s)] = .3
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    SliderComponent slider_5
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 709.9
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C7
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 711.8
      stopVal [duration (s)] = 1.2
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    TextComponent text_51
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 711.8
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_41
      image = flowers/sunflower/image_0726.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 713.1
      stopVal [duration (s)] = .1
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
    ImageComponent image_43
      image = flowers/sunflower/image_0728.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 713.6
      stopVal [duration (s)] = .1
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
    ImageComponent image_45
      image = flowers/daisy/image_0813.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 714.4
      stopVal [duration (s)] = .2
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    SliderComponent slider_6
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 716.2
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C8
      image = flowers/sunflower/image_0747.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 718.1
      stopVal [duration (s)] = 1.2
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    TextComponent text_52
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 718.1
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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
    ImageComponent image_51
      image = flowers/bluebell/image_0247.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 720
      stopVal [duration (s)] = .3
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
    ImageComponent image_53
      image = flowers/sunflower/image_0746.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 721
      stopVal [duration (s)] = .2
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
    SliderComponent slider_7
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 722.5
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C9
      image = flowers/sunflower/image_0737.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 724.4
      stopVal [duration (s)] = 1.2
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    TextComponent text_53
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 724.4
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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
    SliderComponent slider_8
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 728.8
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C10
      image = flowers/bluebell/image_0242.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 730.7
      stopVal [duration (s)] = 1.2
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    TextComponent text_54
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 730.7
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_68
      image = flowers/bluebell/image_0243.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 732
      stopVal [duration (s)] = .3
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
    ImageComponent image_72
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 734
      stopVal [duration (s)] = .4
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
    SliderComponent slider_9
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 735.1
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C11
      image = flowers/daisy/image_0811.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 737
      stopVal [duration (s)] = 1.2
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    TextComponent text_55
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 737
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    SliderComponent slider_10
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 741.4
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C12
      image = flowers/sunflower/image_0730.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 743.3
      stopVal [duration (s)] = 1.2
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    TextComponent text_56
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 743.3
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    SliderComponent slider_11
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 747.7
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C13
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 749.6
      stopVal [duration (s)] = 1.2
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    TextComponent text_57
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 749.6
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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
    SliderComponent slider_12
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 754
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C14
      image = flowers/bluebell/image_0263.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 755.9
      stopVal [duration (s)] = 1.2
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    TextComponent text_58
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 755.9
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_99
      image = flowers/sunflower/image_0740.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 759
      stopVal [duration (s)] = .3
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    SliderComponent slider_13
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 760.3
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    TextComponent text_59
      letterHeight = 0.05
      startVal [time (s)] = 762.2
      stopVal [duration (s)] = 10
      text = You can Relax for 10 seconds
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  Routine Checker_circle
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import locale_setup, sound, gui, visual, core, data, event, logging, clock, parallel
        from psychopy.constants import (NOT_STARTED, STARTED, PLAYING, PAUSED,
                                        STOPPED, FINISHED, PRESSED, RELEASED, FOREVER)
        import numpy as np  # whole numpy lib is available, prepend 'np.'
        from numpy import (sin, cos, tan, log, log10, pi, average,
                           sqrt, std, deg2rad, rad2deg, linspace, asarray)
        from numpy.random import random, randint, normal, shuffle
        import os  # handy system and path functions
        import sys  # to get file system encoding

        # Setup the Window
        win = visual.Window(
            size=[1920, 1080], fullscr=True, screen=0,
            allowGUI=False, allowStencil=False,
            monitor='testMonitor', color=[-1.0,-1.0,-1.0], colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='deg')
        # store frame rate of monitor if we can measure it
        expInfo['frameRate'] = win.getActualFrameRate()
        if expInfo['frameRate'] != None:
            frameDur = 1.0 / round(expInfo['frameRate'])
        else:
            frameDur = 1.0 / 60.0  # could not measure, so guess

        # Initialize components for Routine "message"
        messageClock = core.Clock()
        instruction = visual.TextStim(win=win, name='instruction',
            text='',
            font='Arial',
            units='deg', pos=(0, -5.0), height=0.5, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
        fixation_cross_pre = visual.TextStim(win=win, name='fixation_cross_pre',
            text='+',
            font='Arial',
            units='deg', pos=(0, 0.1), height=1.0, wrapWidth=None, ori=0,
            color='red', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-1.0);

        # Initialize components for Routine "trial"
        trialClock = core.Clock()
        grating_inverse = visual.GratingStim(
            win=win, name='grating_inverse',units='deg',
            tex='sqrXsqr', mask='circle',
            ori=0, pos=[0.0, 0.0], size=[15.0, 15.0], sf=[2,2], phase=[0.75,0.25],
            color=[1,1,1], colorSpace='rgb', opacity=1,blendmode='avg',
            texRes=256, interpolate=True, depth=0.0)
        grating = visual.GratingStim(
            win=win, name='grating',units='deg',
            tex='sqrXsqr', mask='circle',
            ori=0, pos=[0.0, 0], size=[15.0, 15.0], sf=[2,2], phase=[0.25,0.25],
            color=[1,1,1], colorSpace='rgb', opacity=1,blendmode='avg',
            texRes=256, interpolate=True, depth=-1.0)
        fixation_cross_main = visual.TextStim(win=win, name='fixation_cross_main',
            text='+',
            font='Arial',
            units='deg', pos=[0, 0.1], height=1.0, wrapWidth=None, ori=0,
            color='red', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-2.0);
        p_port = parallel.ParallelPort(address='0xD010')

        # custom function
        def trigger():
         p_port.setData(int(255))
         core.wait(0.0002) # 0.2 ms
         p_port.setData(int(0))

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "message"-------
        t = 0
        messageClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        routineTimer.add(2.000000)
        # update component parameters for each repeat
        # keep track of which components have finished
        messageComponents = [instruction, fixation_cross_pre]
        for thisComponent in messageComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "message"-------
        while continueRoutine and routineTimer.getTime() > 0:
            # get current time
            t = messageClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame

            # *instruction* updates
            if t >= 0.0 and instruction.status == NOT_STARTED:
                # keep track of start time/frame for later
                instruction.tStart = t
                instruction.frameNStart = frameN  # exact frame index
                instruction.setAutoDraw(True)
            frameRemains = 0.0 + 1.0- win.monitorFramePeriod * 0.75  # most of one frame period left
            if instruction.status == STARTED and t >= frameRemains:
                instruction.setAutoDraw(False)

            # *fixation_cross_pre* updates
            if t >= 0.0 and fixation_cross_pre.status == NOT_STARTED:
                # keep track of start time/frame for later
                fixation_cross_pre.tStart = t
                fixation_cross_pre.frameNStart = frameN  # exact frame index
                fixation_cross_pre.setAutoDraw(True)
            frameRemains = 0.0 + 2.0- win.monitorFramePeriod * 0.75  # most of one frame period left
            if fixation_cross_pre.status == STARTED and t >= frameRemains:
                fixation_cross_pre.setAutoDraw(False)

            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in messageComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished


            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()

        # -------Ending Routine "message"-------
        for thisComponent in messageComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)

        # set up handler to look after randomisation of conditions etc
        trials = data.TrialHandler(nReps=61, method='sequential',
            extraInfo=expInfo, originPath=-1,
            trialList=[None],
            seed=None, name='trials')
        thisExp.addLoop(trials)  # add the loop to the experiment
        thisTrial = trials.trialList[0]  # so we can initialise stimuli with some values
        # abbreviate parameter names if possible (e.g. rgb = thisTrial.rgb)
        if thisTrial != None:
            for paramName in thisTrial:
                exec('{} = thisTrial[paramName]'.format(paramName))

        for thisTrial in trials:
            currentLoop = trials
            # abbreviate parameter names if possible (e.g. rgb = thisTrial.rgb)
            if thisTrial != None:
                for paramName in thisTrial:
                    exec('{} = thisTrial[paramName]'.format(paramName))

            # ------Prepare to start Routine "trial"-------
            t = 0
            trialClock.reset()  # clock
            frameN = -1
            continueRoutine = True
            routineTimer.add(1.000000)
            # update component parameters for each repeat
            # keep track of which components have finished
            trialComponents = [grating_inverse, grating, fixation_cross_main, p_port]
            for thisComponent in trialComponents:
                if hasattr(thisComponent, 'status'):
                    thisComponent.status = NOT_STARTED

            # -------Start Routine "trial"-------
            while continueRoutine and routineTimer.getTime() > 0:
                # get current time
                t = trialClock.getTime()
                frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
                # update/draw components on each frame

                # *grating_inverse* updates
                if t >= 0.0 and grating_inverse.status == NOT_STARTED:
                    # keep track of start time/frame for later
                    grating_inverse.tStart = t
                    grating_inverse.frameNStart = frameN  # exact frame index
                    grating_inverse.setAutoDraw(True)
                frameRemains = 0.0 + 1.0- win.monitorFramePeriod * 0.75  # most of one frame period left
                if grating_inverse.status == STARTED and t >= frameRemains:
                    grating_inverse.setAutoDraw(False)

                # *grating* updates
                if t >= 0.5 and grating.status == NOT_STARTED:
                    # keep track of start time/frame for later
                    grating.tStart = t
                    grating.frameNStart = frameN  # exact frame index
                    grating.setAutoDraw(True)
                frameRemains = 0.5 + 0.5- win.monitorFramePeriod * 0.75  # most of one frame period left
                if grating.status == STARTED and t >= frameRemains:
                    grating.setAutoDraw(False)

                # *fixation_cross_main* updates
                if t >= 0.0 and fixation_cross_main.status == NOT_STARTED:
                    # keep track of start time/frame for later
                    fixation_cross_main.tStart = t
                    fixation_cross_main.frameNStart = frameN  # exact frame index
                    fixation_cross_main.setAutoDraw(True)
                frameRemains = 0.0 + 1.0- win.monitorFramePeriod * 0.75  # most of one frame period left
                if fixation_cross_main.status == STARTED and t >= frameRemains:
                    fixation_cross_main.setAutoDraw(False)
                # *p_port* updates
                if t >= 0.5 and p_port.status == NOT_STARTED:
                    # keep track of start time/frame for later
                    p_port.tStart = t
                    p_port.frameNStart = frameN  # exact frame index
                    p_port.status = STARTED
                    # win.callOnFlip(p_port.setData, int(255))
                    win.callOnFlip(trigger) # custom
                frameRemains = 0.5 + 0.05- win.monitorFramePeriod * 0.75  # most of one frame period left
                if p_port.status == STARTED and t >= frameRemains:
                    p_port.status = STOPPED
                    # win.callOnFlip(p_port.setData, int(0))

                # check if all components have finished
                if not continueRoutine:  # a component has requested a forced-end of Routine
                    break
                continueRoutine = False  # will revert to True if at least one component still running
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                        continueRoutine = True
                        break  # at least one component has not yet finished


                # refresh the screen
                if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                    win.flip()

            # -------Ending Routine "trial"-------
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "setAutoDraw"):
                    thisComponent.setAutoDraw(False)
            if p_port.status == STARTED:
                win.callOnFlip(p_port.setData, int(0))
            thisExp.nextEntry()
  Routine flashing_Wedge
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import locale_setup
        from psychopy import prefs
        from psychopy import sound, gui, visual, core, data, event, logging, clock, colors, layout
        from psychopy.constants import (NOT_STARTED, STARTED, PLAYING, PAUSED,
                                        STOPPED, FINISHED, PRESSED, RELEASED, FOREVER)

        import numpy as np  # whole numpy lib is available, prepend 'np.'
        from numpy import (sin, cos, tan, log, log10, pi, average,
                           sqrt, std, deg2rad, rad2deg, linspace, asarray)
        from numpy.random import random, randint, normal, shuffle, choice as randchoice
        import os  # handy system and path functions
        import sys  # to get file system encoding

        import psychopy.iohub as io
        from psychopy.hardware import keyboard

        endExpNow = False  # flag for 'escape' or other condition => quit the exp
        frameTolerance = 0.001  # how close to onset before 'same' frame

        # Start Code - component code to be run after the window creation

        # Setup the Window
        win = visual.Window(
            size=(1024, 768), fullscr=True, screen=0,
            winType='pyglet', allowGUI=False, allowStencil=False,
            monitor='testMonitor', color=[0,0,0], colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='height')


        # Make two wedges (in opposite contrast) and alternate them for flashing
        wedge1 = visual.RadialStim(win, tex='sqrXsqr', color=1, size=1,
            visibleWedge=[0, 45], radialCycles=4, angularCycles=8, interpolate=False,
            autoLog=False)  # this stim changes too much for autologging to be useful
        wedge2 = visual.RadialStim(win, tex='sqrXsqr', color=-1, size=1,
            visibleWedge=[0, 45], radialCycles=4, angularCycles=8, interpolate=False,
            autoLog=False)  # this stim changes too much for autologging to be useful

        t = 0
        rotationRate = 0.1  # revs per sec
        flashPeriod = 0.1  # seconds for one B-W cycle (ie 1/Hz)

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        continueRoutine = True
        routineTimer.add(60.00000)

        # update component parameters for each repeat

        # reset timers
        trialClock = core.Clock()
        t = 0
        _timeToFirstFrame = win.getFutureFlipTime(clock="now")
        trialClock.reset(-_timeToFirstFrame)  # t0 is time of first possible flip
        frameN = -1

        # -------Run Routine "trial"-------
        while continueRoutine and routineTimer.getTime() > 0:
            # get current time
            t = trialClock.getTime()
            if t % flashPeriod < flashPeriod / 2.0:  # more accurate to count frames
                stim = wedge1
            else:
                stim = wedge2
            stim.ori = t * rotationRate * 360.0  # set new rotation
            stim.draw()
            win.flip()

        win.close()
        core.quit()
  Routine rest
    TextComponent text_60
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = You can Relax for 10 seconds
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Flow
  Routine trial
  Routine Checker_circle
  Routine rest
  Routine flashing_Wedge
