PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = GUI_upto_VEP1_correct
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = .5
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    ImageComponent LC1
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 2.6
      stopVal [duration (s)] = .8
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    ImageComponent LC2
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 6.5
      stopVal [duration (s)] = .8
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    ImageComponent Rc1
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 10.4
      stopVal [duration (s)] = .8
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    ImageComponent lc3
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 14.3
      stopVal [duration (s)] = .8
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    ImageComponent rc2
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 18.1
      stopVal [duration (s)] = .8
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    ImageComponent rc3
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 22
      stopVal [duration (s)] = .8
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    ImageComponent lc4
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 25.8
      stopVal [duration (s)] = .8
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    ImageComponent lc5
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 29.6
      stopVal [duration (s)] = .8
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    ImageComponent lc6
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 33.4
      stopVal [duration (s)] = .8
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    ImageComponent rc4
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 37.2
      stopVal [duration (s)] = .8
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    ImageComponent rc5
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 41
      stopVal [duration (s)] = .8
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    ImageComponent lc7
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 44.8
      stopVal [duration (s)] = .8
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    ImageComponent rc6
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 48.6
      stopVal [duration (s)] = .8
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    ImageComponent rc7
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 52.4
      stopVal [duration (s)] = .8
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    ImageComponent lc8
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 56.3
      stopVal [duration (s)] = .8
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    ImageComponent MI1LC1
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 60.1
      stopVal [duration (s)] = .8
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 64
      stopVal [duration (s)] = 4.5
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      text:
        You can relax for 5 seconds
    ImageComponent MILC2
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 68.6
      stopVal [duration (s)] = .8
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    ImageComponent MIRC1
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 72.4
      stopVal [duration (s)] = .8
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    ImageComponent MILC3
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 76.2
      stopVal [duration (s)] = .8
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    ImageComponent MIRC2
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 80.1
      stopVal [duration (s)] = .8
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    ImageComponent MIRC3
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 84
      stopVal [duration (s)] = .8
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    ImageComponent MILC4
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 87.8
      stopVal [duration (s)] = .8
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    ImageComponent MILC5
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 91.6
      stopVal [duration (s)] = .8
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    ImageComponent MILC6
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 95.4
      stopVal [duration (s)] = .8
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    ImageComponent MIRC4
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 99.2
      stopVal [duration (s)] = .8
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    ImageComponent MIRC5
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 103
      stopVal [duration (s)] = .8
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    ImageComponent MILC7
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 106.8
      stopVal [duration (s)] = .8
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    ImageComponent MIRC6
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 110.6
      stopVal [duration (s)] = .8
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    ImageComponent MIRC7
      anchor = center-left
      image = RC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 114.4
      stopVal [duration (s)] = .8
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    ImageComponent MILC8
      anchor = center-right
      image = LC.png
      size = (0.5, 0.5)
      startVal [time (s)] = 118.2
      stopVal [duration (s)] = .8
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 122.1
      stopVal [duration (s)] = 4.5
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      text:
        You can Relax for 5 seconds
    ImageComponent MMLI1
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 126.7
      stopVal [duration (s)] = .8
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    ImageComponent MMLI2
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 130.6
      stopVal [duration (s)] = .8
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    ImageComponent MMRI1
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 134.4
      stopVal [duration (s)] = .8
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    ImageComponent MMLI3
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 138.2
      stopVal [duration (s)] = .8
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    ImageComponent MMRI2
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 142
      stopVal [duration (s)] = .8
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    ImageComponent MMRI3
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 145.8
      stopVal [duration (s)] = .8
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    ImageComponent MMLI4
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 149.6
      stopVal [duration (s)] = .8
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    ImageComponent MMLI5
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 153.4
      stopVal [duration (s)] = .8
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    ImageComponent MMLI6
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 157.2
      stopVal [duration (s)] = .8
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    ImageComponent MMRi4
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 161
      stopVal [duration (s)] = .8
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    ImageComponent MMRI5
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 164.8
      stopVal [duration (s)] = .8
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    ImageComponent MMLI7
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 168.6
      stopVal [duration (s)] = .8
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    ImageComponent MMRI6
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 172.4
      stopVal [duration (s)] = .8
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    ImageComponent MMRI7
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 176.2
      stopVal [duration (s)] = .8
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    ImageComponent MMLI8
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 180
      stopVal [duration (s)] = .8
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 183.9
      stopVal [duration (s)] = 4.5
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      text:
        You can relax for 5 seconds
    ImageComponent MILI1
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 188.5
      stopVal [duration (s)] = .8
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    ImageComponent MILI2
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 192.3
      stopVal [duration (s)] = .8
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    ImageComponent MIRI1
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 196.1
      stopVal [duration (s)] = .8
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    ImageComponent MILI3
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 199.9
      stopVal [duration (s)] = .8
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    ImageComponent MIRi2
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 203.7
      stopVal [duration (s)] = .8
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    ImageComponent MIRI3
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 207.5
      stopVal [duration (s)] = .8
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    ImageComponent MILI4
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 211.3
      stopVal [duration (s)] = .8
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    ImageComponent MILI5
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 215.1
      stopVal [duration (s)] = .8
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    ImageComponent MILI6
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 218.9
      stopVal [duration (s)] = .8
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    ImageComponent MIRI4
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 222.7
      stopVal [duration (s)] = .8
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    ImageComponent MIRI5
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 226.5
      stopVal [duration (s)] = .8
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    ImageComponent MILI7
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 230.3
      stopVal [duration (s)] = .8
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    ImageComponent MIri6
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 234.1
      stopVal [duration (s)] = .8
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    ImageComponent miri7
      anchor = center-left
      image = RI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 237.9
      stopVal [duration (s)] = .8
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    ImageComponent mili8
      anchor = center-right
      image = LI.png
      size = (0.5, 0.5)
      startVal [time (s)] = 241.7
      stopVal [duration (s)] = .8
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 245.5
      stopVal [duration (s)] = 4.5
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      text:
        You can relax for 5 seconds
    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 250.1
      stopVal [duration (s)] = .8
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      text:
        Press K
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 253.9
      stopVal [duration (s)] = .8
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      text:
        Press W
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 257.7
      stopVal [duration (s)] = .8
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      text:
        Press T
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 261.5
      stopVal [duration (s)] = .8
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      text:
        Press Z
    TextComponent text_9
      letterHeight = 0.05
      startVal [time (s)] = 265.3
      stopVal [duration (s)] = .8
      text = Press I
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    TextComponent text_10
      letterHeight = 0.05
      startVal [time (s)] = 269.1
      stopVal [duration (s)] = .8
      text = Press B
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    TextComponent text_11
      letterHeight = 0.05
      startVal [time (s)] = 272.9
      stopVal [duration (s)] = .4
      text = Press X
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    TextComponent text_12
      letterHeight = 0.05
      startVal [time (s)] = 276.7
      stopVal [duration (s)] = .8
      text = Press Y
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    TextComponent text_13
      letterHeight = 0.05
      startVal [time (s)] = 280.5
      stopVal [duration (s)] = .8
      text = Press B
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    TextComponent text_14
      letterHeight = 0.05
      startVal [time (s)] = 284.3
      stopVal [duration (s)] = .8
      text = Press C
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    TextComponent text_15
      letterHeight = 0.05
      startVal [time (s)] = 288.1
      stopVal [duration (s)] = .8
      text = Press O
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    TextComponent text_16
      letterHeight = 0.05
      startVal [time (s)] = 291.9
      stopVal [duration (s)] = .8
      text = Press R
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    TextComponent text_17
      letterHeight = 0.05
      startVal [time (s)] = 295.7
      stopVal [duration (s)] = .8
      text = Press V
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    TextComponent text_18
      letterHeight = 0.05
      startVal [time (s)] = 299.5
      stopVal [duration (s)] = .8
      text = Press N
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    TextComponent text_19
      letterHeight = 0.05
      startVal [time (s)] = 303.3
      stopVal [duration (s)] = .8
      text = Press U
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    TextComponent text_20
      letterHeight = 0.05
      startVal [time (s)] = 307.1
      stopVal [duration (s)] = .8
      text = Press M
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    TextComponent text_21
      letterHeight = 0.05
      startVal [time (s)] = 310.9
      stopVal [duration (s)] = .8
      text = Press A
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    TextComponent text_22
      letterHeight = 0.05
      startVal [time (s)] = 314.7
      stopVal [duration (s)] = .8
      text = Press F
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    TextComponent text_23
      letterHeight = 0.05
      startVal [time (s)] = 318.5
      stopVal [duration (s)] = 4.5
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      text:
        You can Relax for 5 seconds
    TextComponent text_24
      letterHeight = 0.05
      startVal [time (s)] = 323.1
      stopVal [duration (s)] = .8
      text = Press G
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    TextComponent text_25
      letterHeight = 0.05
      startVal [time (s)] = 326.9
      stopVal [duration (s)] = .8
      text = Press E
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    TextComponent text_26
      letterHeight = 0.05
      startVal [time (s)] = 330.7
      stopVal [duration (s)] = .8
      text = Press Z
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    TextComponent text_27
      letterHeight = 0.05
      startVal [time (s)] = 334.5
      stopVal [duration (s)] = .8
      text = Press O
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    TextComponent text_28
      letterHeight = 0.05
      startVal [time (s)] = 338.3
      stopVal [duration (s)] = .8
      text = Press I
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    TextComponent text_29
      letterHeight = 0.05
      startVal [time (s)] = 342.1
      stopVal [duration (s)] = .8
      text = Press B
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    TextComponent text_30
      letterHeight = 0.05
      startVal [time (s)] = 345.9
      stopVal [duration (s)] = .8
      text = Press A
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    TextComponent text_31
      letterHeight = 0.05
      startVal [time (s)] = 349.7
      stopVal [duration (s)] = .8
      text = Press Q
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    TextComponent text_32
      letterHeight = 0.05
      startVal [time (s)] = 353.5
      stopVal [duration (s)] = .8
      text = Press B
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    TextComponent text_33
      letterHeight = 0.05
      startVal [time (s)] = 357.3
      stopVal [duration (s)] = .8
      text = Press C
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    TextComponent text_34
      letterHeight = 0.05
      startVal [time (s)] = 361.1
      stopVal [duration (s)] = .8
      text = Press O
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    TextComponent text_35
      letterHeight = 0.05
      startVal [time (s)] = 364.9
      stopVal [duration (s)] = .8
      text = Press R
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    TextComponent text_36
      letterHeight = 0.05
      startVal [time (s)] = 368.7
      stopVal [duration (s)] = .8
      text = Press V
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    TextComponent text_37
      letterHeight = 0.05
      startVal [time (s)] = 372.5
      stopVal [duration (s)] = .8
      text = Press N
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    TextComponent text_38
      letterHeight = 0.05
      startVal [time (s)] = 376.3
      stopVal [duration (s)] = .8
      text = Press U
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    TextComponent text_39
      letterHeight = 0.05
      startVal [time (s)] = 380.1
      stopVal [duration (s)] = .8
      text = Press M
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    TextComponent text_40
      letterHeight = 0.05
      startVal [time (s)] = 383.9
      stopVal [duration (s)] = .8
      text = Press L
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    TextComponent text_41
      letterHeight = 0.05
      startVal [time (s)] = 387.7
      stopVal [duration (s)] = .8
      text = Press F
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    TextComponent text_42
      letterHeight = 0.05
      startVal [time (s)] = 391.5
      stopVal [duration (s)] = 4.5
      text = You can Relax for 5 seconds
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    ImageComponent MIRM1
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 396.1
      stopVal [duration (s)] = .8
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    ImageComponent MILM1
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 399.9
      stopVal [duration (s)] = .8
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    ImageComponent MIRM2
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 403.7
      stopVal [duration (s)] = .8
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    ImageComponent MILM2
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 407.5
      stopVal [duration (s)] = .8
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    ImageComponent MILM3
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 411.3
      stopVal [duration (s)] = .8
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    ImageComponent MIRM3
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 415.1
      stopVal [duration (s)] = .8
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    ImageComponent MILM4
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 418.9
      stopVal [duration (s)] = .8
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    ImageComponent MIRM4
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 422.7
      stopVal [duration (s)] = .8
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    ImageComponent MILM5
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 426.5
      stopVal [duration (s)] = .8
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    ImageComponent MIRM5
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 430.3
      stopVal [duration (s)] = .8
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    ImageComponent MIRM6
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 434.1
      stopVal [duration (s)] = .8
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    ImageComponent MILM6
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 437.9
      stopVal [duration (s)] = .8
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    ImageComponent MIRM7
      anchor = center-left
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 441.7
      stopVal [duration (s)] = .8
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    ImageComponent MILM7
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 445.5
      stopVal [duration (s)] = .8
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    ImageComponent MILM8
      anchor = center-left
      flipHoriz = True
      image = mug image.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 449.3
      stopVal [duration (s)] = .8
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Flow
  Routine trial
