PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = GUI_upto_VEP1_correct
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = .5
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    ImageComponent Cross
      image = cross.png
      size = (0.1, 0.1)
      startVal [time (s)] = 2.1
      stopVal [time (s)] = 62.1
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 62.3
      stopVal [duration (s)] = 5
      text = Relax for 5 seconds
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    SoundComponent sound_2
      sound = A
      startVal [time (s)] = 67.5
      stopVal [duration (s)] = .500
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    SoundComponent sound_3
      sound = A
      startVal [time (s)] = 127.7
      stopVal [duration (s)] = .500
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Flow
  Routine trial
