PsychoPy2experiment version="2022.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = GUI_upto_VEP1_correct
  keyboardBackend = ioHub
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Routines
  Routine trial
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = .2
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    ImageComponent VEP1I9
      image = VEP3 protocol images/9.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = .8
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    SliderComponent S9
      color = 0.6549, 0.6549, 0.6549
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity','Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 1.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent vep1I18
      image = VEP3 protocol images/18.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 3.8
      stopVal [duration (s)] = .8
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    SliderComponent S18
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 4.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I31
      image = VEP3 protocol images/31.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 6.8
      stopVal [duration (s)] = .8
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    SliderComponent S31
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 7.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I24
      image = VEP3 protocol images/24.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 9.8
      stopVal [duration (s)] = .8
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    SliderComponent S24
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 10.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I30
      image = VEP3 protocol images/30.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 12.8
      stopVal [duration (s)] = .8
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    SliderComponent S30
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 13.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEp1I12
      image = VEP3 protocol images/12.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 15.8
      stopVal [duration (s)] = .8
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    SliderComponent S12
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 16.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I27
      image = VEP3 protocol images/27.png
      size = (0.5, 0.5)
      startVal [time (s)] = 18.8
      stopVal [duration (s)] = .8
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    SliderComponent S27
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 19.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I28
      image = VEP3 protocol images/28.jpeg
      size = (0.5, 0.5)
      startVal [time (s)] = 21.8
      stopVal [duration (s)] = .8
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    SliderComponent S28
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 22.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I16
      image = VEP3 protocol images/16.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 24.8
      stopVal [duration (s)] = .8
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    SliderComponent S16
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 25.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I29
      image = VEP3 protocol images/29.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 27.8
      stopVal [duration (s)] = .8
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    SliderComponent S29
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 28.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I32
      image = VEP3 protocol images/32.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 30.8
      stopVal [duration (s)] = .8
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    SliderComponent S32
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 31.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I5
      image = VEP3 protocol images/5.png
      size = (0.5, 0.5)
      startVal [time (s)] = 33.8
      stopVal [duration (s)] = .8
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    SliderComponent S5
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 34.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I23
      image = VEP3 protocol images/23.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 36.8
      stopVal [duration (s)] = .8
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    SliderComponent S23
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 37.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I26
      image = VEP3 protocol images/26.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 39.8
      stopVal [duration (s)] = .8
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
    ImageComponent vep1I8
      image = VEP3 protocol images/8.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 42.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I17
      image = VEP3 protocol images/17.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 45.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I3
      image = VEP3 protocol images/3.png
      size = (0.5, 0.5)
      startVal [time (s)] = 48.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I11
      image = VEP3 protocol images/11.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 51.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I21
      image = VEP3 protocol images/21.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 54.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I25
      image = VEP3 protocol images/25.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 57.8
      stopVal [duration (s)] = .8
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    SliderComponent s25
      forceEndRoutine = False
      granularity = 0
      labels = ('Celebrity', 'Food','Animal','Random People')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 58.7
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP1I20
      image = VEP3 protocol images/20.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 60.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I13
      image = VEP3 protocol images/13.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 63.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I19
      image = VEP3 protocol images/19.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 66.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I1
      image = VEP3 protocol images/1.png
      size = (0.5, 0.5)
      startVal [time (s)] = 69.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I2
      image = VEP3 protocol images/2.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 84.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I10
      image = VEP3 protocol images/10.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 87.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I15
      image = VEP3 protocol images/15.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 90.8
      stopVal [duration (s)] = .8
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
    ImageComponent VEP1I14
      image = VEP3 protocol images/14.jfif
      size = (0.5, 0.5)
      startVal [time (s)] = 93.8
      stopVal [duration (s)] = .8
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
    TextComponent text_44
      letterHeight = 0.05
      startVal [time (s)] = 96.8
      stopVal [duration (s)] = 9.5
      text = You can Relax for 10 seconds
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    ImageComponent VEP2C1
      image = flowers/daisy/image_0801.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 106.4
      stopVal [duration (s)] = 1.2
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    TextComponent text_45
      letterHeight = 0.08
      pos = (-0.5, 0)
      startVal [time (s)] = 106.4
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent d1
      image = flowers/daisy/image_0802.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 107.8
      stopVal [duration (s)] = .5
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    ImageComponent d2
      image = flowers/daisy/image_0806.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 108.4
      stopVal [duration (s)] = .3
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    ImageComponent s1
      image = flowers/sunflower/image_0721.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 108.8
      stopVal [duration (s)] = .4
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    ImageComponent b1
      image = flowers/bluebell/image_0242.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 109.3
      stopVal [duration (s)] = .5
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    ImageComponent d4
      image = flowers/daisy/image_0814.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 109.9
      stopVal [duration (s)] = .3
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    ImageComponent s2
      image = flowers/sunflower/image_0726.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 110.3
      stopVal [duration (s)] = .4
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    SliderComponent VS1
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 110.8
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP2C2
      image = flowers/sunflower/image_0730.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 112.7
      stopVal [duration (s)] = 1.2
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    TextComponent text_46
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 112.7
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent b2
      image = flowers/sunflower/image_0741.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 114
      stopVal [duration (s)] = .3
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    ImageComponent image
      image = flowers/sunflower/image_0739.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 114.4
      stopVal [duration (s)] = .2
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    ImageComponent image_2
      image = flowers/daisy/image_0810.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 114.7
      stopVal [duration (s)] = .3
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    ImageComponent image_3
      image = flowers/bluebell/image_0257.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 115.1
      stopVal [duration (s)] = .3
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    ImageComponent image_4
      image = flowers/sunflower/image_0736.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 115.5
      stopVal [duration (s)] = .4
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    ImageComponent image_5
      image = flowers/sunflower/image_0742.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 116
      stopVal [duration (s)] = .2
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    ImageComponent image_6
      image = flowers/bluebell/image_0251.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 116.3
      stopVal [duration (s)] = .2
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    ImageComponent image_7
      image = flowers/daisy/image_0817.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 116.6
      stopVal [duration (s)] = .4
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    SliderComponent slider
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 117.1
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP2C3
      image = flowers/daisy/image_0817.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 119
      stopVal [duration (s)] = 1.2
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    TextComponent text_47
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 119
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_8
      image = flowers/bluebell/image_0252.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 120.3
      stopVal [duration (s)] = .3
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    ImageComponent image_9
      image = flowers/daisy/image_0808.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 120.7
      stopVal [duration (s)] = .2
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    ImageComponent image_10
      image = flowers/sunflower/image_0721.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 121
      stopVal [duration (s)] = .3
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    ImageComponent image_11
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 121.4
      stopVal [duration (s)] = .2
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    ImageComponent image_12
      image = flowers/daisy/image_0810.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 121.7
      stopVal [duration (s)] = .3
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    ImageComponent image_13
      image = flowers/bluebell/image_0248.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 122.1
      stopVal [duration (s)] = .4
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    ImageComponent image_14
      image = flowers/bluebell/image_0251.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 122.6
      stopVal [duration (s)] = .3
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    ImageComponent image_15
      image = flowers/daisy/image_0805.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 123
      stopVal [duration (s)] = .3
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    SliderComponent slider_2
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 123.4
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP2C4
      image = flowers/bluebell/image_0262.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 125.3
      stopVal [duration (s)] = 1.4
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    TextComponent text_48
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 125.3
      stopVal [duration (s)] = 1.4
      text = Cue Image is
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    ImageComponent image_16
      image = flowers/sunflower/image_0728.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 126.8
      stopVal [duration (s)] = .4
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    ImageComponent image_17
      image = flowers/bluebell/image_0247.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 127.3
      stopVal [duration (s)] = .3
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    ImageComponent image_18
      image = flowers/bluebell/image_0242.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 127.7
      stopVal [duration (s)] = .3
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    ImageComponent image_19
      image = flowers/bluebell/image_0249.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 128.1
      stopVal [duration (s)] = .4
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    ImageComponent image_20
      image = flowers/daisy/image_0812.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 128.6
      stopVal [duration (s)] = .3
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    ImageComponent image_21
      image = flowers/bluebell/image_0250.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 129
      stopVal [duration (s)] = .4
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    ImageComponent image_22
      image = flowers/bluebell/image_0257.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 129.5
      stopVal [duration (s)] = .4
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    ImageComponent image_23
      image = flowers/bluebell/image_0261.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 129.8
      stopVal [duration (s)] = .4
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    ImageComponent image_24
      image = flowers/daisy/image_0817.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 130.3
      stopVal [duration (s)] = .4
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 130.8
      stopVal [duration (s)] = 2
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent VEP2C5
      image = flowers/sunflower/image_0737.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 132.9
      stopVal [duration (s)] = 1.4
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    TextComponent text_49
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 132.9
      stopVal [duration (s)] = 1.4
      text = Cue Image is
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    ImageComponent image_26
      image = flowers/sunflower/image_0727.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 134.5
      stopVal [duration (s)] = .2
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    ImageComponent image_27
      image = flowers/sunflower/image_0736.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 134.8
      stopVal [duration (s)] = .2
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    ImageComponent image_28
      image = flowers/bluebell/image_0252.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 135.1
      stopVal [duration (s)] = .4
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    ImageComponent image_29
      image = flowers/bluebell/image_0268.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 135.6
      stopVal [duration (s)] = .3
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    ImageComponent image_30
      image = flowers/sunflower/image_0730.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 136
      stopVal [duration (s)] = .4
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    ImageComponent image_31
      image = flowers/daisy/image_0809.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 136.5
      stopVal [duration (s)] = .1
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    ImageComponent image_32
      image = flowers/daisy/image_0817.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 136.7
      stopVal [duration (s)] = .3
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    ImageComponent image_33
      image = flowers/daisy/image_0802.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 137.1
      stopVal [duration (s)] = .4
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    ImageComponent image_34
      image = flowers/sunflower/image_0737.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 137.6
      stopVal [duration (s)] = .1
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    SliderComponent slider_4
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 137.8
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C6
      image = flowers/bluebell/image_0312.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 139.7
      stopVal [duration (s)] = 1.2
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    TextComponent text_50
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 139.7
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_36
      image = flowers/daisy/image_0811.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 141
      stopVal [duration (s)] = .5
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    ImageComponent image_37
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 141.6
      stopVal [duration (s)] = .3
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    ImageComponent image_25
      image = flowers/bluebell/image_0249.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 142
      stopVal [duration (s)] = .2
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    ImageComponent image_35
      image = flowers/sunflower/image_0731.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 142.3
      stopVal [duration (s)] = .2
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
    ImageComponent image_39
      image = flowers/daisy/image_0811.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 143.2
      stopVal [duration (s)] = .4
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    ImageComponent image_40
      image = flowers/sunflower/image_0742.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 143.7
      stopVal [duration (s)] = .3
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    SliderComponent slider_5
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 144.1
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C7
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 146
      stopVal [duration (s)] = 1.2
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    TextComponent text_51
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 146
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_41
      image = flowers/sunflower/image_0726.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 147.3
      stopVal [duration (s)] = .1
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
    ImageComponent image_43
      image = flowers/sunflower/image_0728.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 147.8
      stopVal [duration (s)] = .1
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    ImageComponent image_44
      image = flowers/sunflower/image_0721.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 148
      stopVal [duration (s)] = .5
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    ImageComponent image_47
      image = flowers/sunflower/image_0736.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 149.3
      stopVal [duration (s)] = .3
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
    ImageComponent image_49
      image = flowers/sunflower/image_0728.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 150
      stopVal [duration (s)] = .3
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    SliderComponent slider_6
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 150.4
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C8
      image = flowers/sunflower/image_0747.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 152.3
      stopVal [duration (s)] = 1.2
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    TextComponent text_52
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 152.3
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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
    ImageComponent image_53
      image = flowers/sunflower/image_0746.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 155.2
      stopVal [duration (s)] = .2
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
    ImageComponent image_55
      image = flowers/sunflower/image_0738.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 156
      stopVal [duration (s)] = .4
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    ImageComponent image_56
      image = flowers/sunflower/image_0747.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 156.5
      stopVal [duration (s)] = .1
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    SliderComponent slider_7
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 156.7
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C9
      image = flowers/sunflower/image_0737.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 158.6
      stopVal [duration (s)] = 1.2
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    TextComponent text_53
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 158.6
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    ImageComponent image_61
      image = flowers/sunflower/image_0750.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 161
      stopVal [duration (s)] = .2
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    ImageComponent image_64
      image = flowers/daisy/image_0812.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 162
      stopVal [duration (s)] = .2
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
    SliderComponent slider_8
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 163
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C10
      image = flowers/bluebell/image_0242.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 164.9
      stopVal [duration (s)] = 1.2
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    TextComponent text_54
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 164.9
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    SliderComponent slider_9
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 169.3
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C11
      image = flowers/daisy/image_0811.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 171.2
      stopVal [duration (s)] = 1.2
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    TextComponent text_55
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 171.2
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    SliderComponent slider_10
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 175.6
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C12
      image = flowers/sunflower/image_0730.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 177.5
      stopVal [duration (s)] = 1.2
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    TextComponent text_56
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 177.5
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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    SliderComponent slider_11
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 181.9
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C13
      image = flowers/daisy/image_0818.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 183.7
      stopVal [duration (s)] = 1.2
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    TextComponent text_57
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 183.7
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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
    SliderComponent slider_12
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 188.2
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    ImageComponent C14
      image = flowers/bluebell/image_0263.jpg
      size = (0.5, 0.5)
      startVal [time (s)] = 190.1
      stopVal [duration (s)] = 1.2
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    TextComponent text_58
      letterHeight = 0.05
      pos = (-0.5, 0)
      startVal [time (s)] = 190.1
      stopVal [duration (s)] = 1.2
      text = Cue Image is
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
    SliderComponent slider_13
      forceEndRoutine = False
      granularity = 0
      labels = ('1-2', '3-4', '5-6', '7-8')
      letterHeight = 0.05
      size = (1.0, 0.1)
      startVal [time (s)] = 194.5
      stopVal [duration (s)] = 1.8
      styles = rating
      ticks = (1, 2, 3, 4)
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    TextComponent text_59
      letterHeight = 0.05
      startVal [time (s)] = 196.4
      stopVal [duration (s)] = 10
      text = You can Relax for 10 seconds
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  Routine Checker_circle
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import locale_setup, sound, gui, visual, core, data, event, logging, clock, parallel
        from psychopy.constants import (NOT_STARTED, STARTED, PLAYING, PAUSED,
                                        STOPPED, FINISHED, PRESSED, RELEASED, FOREVER)
        import numpy as np  # whole numpy lib is available, prepend 'np.'
        from numpy import (sin, cos, tan, log, log10, pi, average,
                           sqrt, std, deg2rad, rad2deg, linspace, asarray)
        from numpy.random import random, randint, normal, shuffle
        import os  # handy system and path functions
        import sys  # to get file system encoding

        # Setup the Window
        win = visual.Window(
            size=[1920, 1080], fullscr=True, screen=0,
            allowGUI=False, allowStencil=False,
            monitor='testMonitor', color=[-1.0,-1.0,-1.0], colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='deg')
        # store frame rate of monitor if we can measure it
        expInfo['frameRate'] = win.getActualFrameRate()
        if expInfo['frameRate'] != None:
            frameDur = 1.0 / round(expInfo['frameRate'])
        else:
            frameDur = 1.0 / 60.0  # could not measure, so guess

        # Initialize components for Routine "message"
        messageClock = core.Clock()
        instruction = visual.TextStim(win=win, name='instruction',
            text='',
            font='Arial',
            units='deg', pos=(0, -5.0), height=0.5, wrapWidth=None, ori=0,
            color='white', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=0.0);
        fixation_cross_pre = visual.TextStim(win=win, name='fixation_cross_pre',
            text='+',
            font='Arial',
            units='deg', pos=(0, 0.1), height=1.0, wrapWidth=None, ori=0,
            color='red', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-1.0);

        # Initialize components for Routine "trial"
        trialClock = core.Clock()
        grating_inverse = visual.GratingStim(
            win=win, name='grating_inverse',units='deg',
            tex='sqrXsqr', mask='circle',
            ori=0, pos=[0.0, 0.0], size=[15.0, 15.0], sf=[2,2], phase=[0.75,0.25],
            color=[1,1,1], colorSpace='rgb', opacity=1,blendmode='avg',
            texRes=256, interpolate=True, depth=0.0)
        grating = visual.GratingStim(
            win=win, name='grating',units='deg',
            tex='sqrXsqr', mask='circle',
            ori=0, pos=[0.0, 0], size=[15.0, 15.0], sf=[2,2], phase=[0.25,0.25],
            color=[1,1,1], colorSpace='rgb', opacity=1,blendmode='avg',
            texRes=256, interpolate=True, depth=-1.0)
        fixation_cross_main = visual.TextStim(win=win, name='fixation_cross_main',
            text='+',
            font='Arial',
            units='deg', pos=[0, 0.1], height=1.0, wrapWidth=None, ori=0,
            color='red', colorSpace='rgb', opacity=1,
            languageStyle='LTR',
            depth=-2.0);
        p_port = parallel.ParallelPort(address='0xD010')

        # custom function
        def trigger():
         p_port.setData(int(255))
         core.wait(0.0002) # 0.2 ms
         p_port.setData(int(0))

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "message"-------
        t = 0
        messageClock.reset()  # clock
        frameN = -1
        continueRoutine = True
        routineTimer.add(2.000000)
        # update component parameters for each repeat
        # keep track of which components have finished
        messageComponents = [instruction, fixation_cross_pre]
        for thisComponent in messageComponents:
            if hasattr(thisComponent, 'status'):
                thisComponent.status = NOT_STARTED

        # -------Start Routine "message"-------
        while continueRoutine and routineTimer.getTime() > 0:
            # get current time
            t = messageClock.getTime()
            frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
            # update/draw components on each frame

            # *instruction* updates
            if t >= 0.0 and instruction.status == NOT_STARTED:
                # keep track of start time/frame for later
                instruction.tStart = t
                instruction.frameNStart = frameN  # exact frame index
                instruction.setAutoDraw(True)
            frameRemains = 0.0 + 1.0- win.monitorFramePeriod * 0.75  # most of one frame period left
            if instruction.status == STARTED and t >= frameRemains:
                instruction.setAutoDraw(False)

            # *fixation_cross_pre* updates
            if t >= 0.0 and fixation_cross_pre.status == NOT_STARTED:
                # keep track of start time/frame for later
                fixation_cross_pre.tStart = t
                fixation_cross_pre.frameNStart = frameN  # exact frame index
                fixation_cross_pre.setAutoDraw(True)
            frameRemains = 0.0 + 2.0- win.monitorFramePeriod * 0.75  # most of one frame period left
            if fixation_cross_pre.status == STARTED and t >= frameRemains:
                fixation_cross_pre.setAutoDraw(False)

            # check if all components have finished
            if not continueRoutine:  # a component has requested a forced-end of Routine
                break
            continueRoutine = False  # will revert to True if at least one component still running
            for thisComponent in messageComponents:
                if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                    continueRoutine = True
                    break  # at least one component has not yet finished


            # refresh the screen
            if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                win.flip()

        # -------Ending Routine "message"-------
        for thisComponent in messageComponents:
            if hasattr(thisComponent, "setAutoDraw"):
                thisComponent.setAutoDraw(False)

        # set up handler to look after randomisation of conditions etc
        trials = data.TrialHandler(nReps=61, method='sequential',
            extraInfo=expInfo, originPath=-1,
            trialList=[None],
            seed=None, name='trials')
        thisExp.addLoop(trials)  # add the loop to the experiment
        thisTrial = trials.trialList[0]  # so we can initialise stimuli with some values
        # abbreviate parameter names if possible (e.g. rgb = thisTrial.rgb)
        if thisTrial != None:
            for paramName in thisTrial:
                exec('{} = thisTrial[paramName]'.format(paramName))

        for thisTrial in trials:
            currentLoop = trials
            # abbreviate parameter names if possible (e.g. rgb = thisTrial.rgb)
            if thisTrial != None:
                for paramName in thisTrial:
                    exec('{} = thisTrial[paramName]'.format(paramName))

            # ------Prepare to start Routine "trial"-------
            t = 0
            trialClock.reset()  # clock
            frameN = -1
            continueRoutine = True
            routineTimer.add(1.000000)
            # update component parameters for each repeat
            # keep track of which components have finished
            trialComponents = [grating_inverse, grating, fixation_cross_main, p_port]
            for thisComponent in trialComponents:
                if hasattr(thisComponent, 'status'):
                    thisComponent.status = NOT_STARTED

            # -------Start Routine "trial"-------
            while continueRoutine and routineTimer.getTime() > 0:
                # get current time
                t = trialClock.getTime()
                frameN = frameN + 1  # number of completed frames (so 0 is the first frame)
                # update/draw components on each frame

                # *grating_inverse* updates
                if t >= 0.0 and grating_inverse.status == NOT_STARTED:
                    # keep track of start time/frame for later
                    grating_inverse.tStart = t
                    grating_inverse.frameNStart = frameN  # exact frame index
                    grating_inverse.setAutoDraw(True)
                frameRemains = 0.0 + 1.0- win.monitorFramePeriod * 0.75  # most of one frame period left
                if grating_inverse.status == STARTED and t >= frameRemains:
                    grating_inverse.setAutoDraw(False)

                # *grating* updates
                if t >= 0.5 and grating.status == NOT_STARTED:
                    # keep track of start time/frame for later
                    grating.tStart = t
                    grating.frameNStart = frameN  # exact frame index
                    grating.setAutoDraw(True)
                frameRemains = 0.5 + 0.5- win.monitorFramePeriod * 0.75  # most of one frame period left
                if grating.status == STARTED and t >= frameRemains:
                    grating.setAutoDraw(False)

                # *fixation_cross_main* updates
                if t >= 0.0 and fixation_cross_main.status == NOT_STARTED:
                    # keep track of start time/frame for later
                    fixation_cross_main.tStart = t
                    fixation_cross_main.frameNStart = frameN  # exact frame index
                    fixation_cross_main.setAutoDraw(True)
                frameRemains = 0.0 + 1.0- win.monitorFramePeriod * 0.75  # most of one frame period left
                if fixation_cross_main.status == STARTED and t >= frameRemains:
                    fixation_cross_main.setAutoDraw(False)
                # *p_port* updates
                if t >= 0.5 and p_port.status == NOT_STARTED:
                    # keep track of start time/frame for later
                    p_port.tStart = t
                    p_port.frameNStart = frameN  # exact frame index
                    p_port.status = STARTED
                    # win.callOnFlip(p_port.setData, int(255))
                    win.callOnFlip(trigger) # custom
                frameRemains = 0.5 + 0.05- win.monitorFramePeriod * 0.75  # most of one frame period left
                if p_port.status == STARTED and t >= frameRemains:
                    p_port.status = STOPPED
                    # win.callOnFlip(p_port.setData, int(0))

                # check if all components have finished
                if not continueRoutine:  # a component has requested a forced-end of Routine
                    break
                continueRoutine = False  # will revert to True if at least one component still running
                for thisComponent in trialComponents:
                    if hasattr(thisComponent, "status") and thisComponent.status != FINISHED:
                        continueRoutine = True
                        break  # at least one component has not yet finished


                # refresh the screen
                if continueRoutine:  # don't flip if this routine is over or we'll get a blank screen
                    win.flip()

            # -------Ending Routine "trial"-------
            for thisComponent in trialComponents:
                if hasattr(thisComponent, "setAutoDraw"):
                    thisComponent.setAutoDraw(False)
            if p_port.status == STARTED:
                win.callOnFlip(p_port.setData, int(0))
            thisExp.nextEntry()
  Routine flashing_Wedge
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        from psychopy import locale_setup
        from psychopy import prefs
        from psychopy import sound, gui, visual, core, data, event, logging, clock, colors, layout
        from psychopy.constants import (NOT_STARTED, STARTED, PLAYING, PAUSED,
                                        STOPPED, FINISHED, PRESSED, RELEASED, FOREVER)

        import numpy as np  # whole numpy lib is available, prepend 'np.'
        from numpy import (sin, cos, tan, log, log10, pi, average,
                           sqrt, std, deg2rad, rad2deg, linspace, asarray)
        from numpy.random import random, randint, normal, shuffle, choice as randchoice
        import os  # handy system and path functions
        import sys  # to get file system encoding

        import psychopy.iohub as io
        from psychopy.hardware import keyboard

        endExpNow = False  # flag for 'escape' or other condition => quit the exp
        frameTolerance = 0.001  # how close to onset before 'same' frame

        # Start Code - component code to be run after the window creation

        # Setup the Window
        win = visual.Window(
            size=(1024, 768), fullscr=True, screen=0,
            winType='pyglet', allowGUI=False, allowStencil=False,
            monitor='testMonitor', color=[0,0,0], colorSpace='rgb',
            blendMode='avg', useFBO=True,
            units='height')


        # Make two wedges (in opposite contrast) and alternate them for flashing
        wedge1 = visual.RadialStim(win, tex='sqrXsqr', color=1, size=1,
            visibleWedge=[0, 45], radialCycles=4, angularCycles=8, interpolate=False,
            autoLog=False)  # this stim changes too much for autologging to be useful
        wedge2 = visual.RadialStim(win, tex='sqrXsqr', color=-1, size=1,
            visibleWedge=[0, 45], radialCycles=4, angularCycles=8, interpolate=False,
            autoLog=False)  # this stim changes too much for autologging to be useful

        t = 0
        rotationRate = 0.1  # revs per sec
        flashPeriod = 0.1  # seconds for one B-W cycle (ie 1/Hz)

        # Create some handy timers
        globalClock = core.Clock()  # to track the time since experiment started
        routineTimer = core.CountdownTimer()  # to track time remaining of each (non-slip) routine

        # ------Prepare to start Routine "trial"-------
        continueRoutine = True
        routineTimer.add(60.00000)

        # update component parameters for each repeat

        # reset timers
        trialClock = core.Clock()
        t = 0
        _timeToFirstFrame = win.getFutureFlipTime(clock="now")
        trialClock.reset(-_timeToFirstFrame)  # t0 is time of first possible flip
        frameN = -1

        # -------Run Routine "trial"-------
        while continueRoutine and routineTimer.getTime() > 0:
            # get current time
            t = trialClock.getTime()
            if t % flashPeriod < flashPeriod / 2.0:  # more accurate to count frames
                stim = wedge1
            else:
                stim = wedge2
            stim.ori = t * rotationRate * 360.0  # set new rotation
            stim.draw()
            win.flip()

        win.close()
        core.quit()
  Routine rest
    TextComponent text_60
      color = 1.0000, 1.0000, 1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 10
      text = You can Relax for 10 seconds
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Flow
  Routine trial
  Routine Checker_circle
  Routine rest
  Routine flashing_Wedge
